<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT9M</rx:DueTime>
          <rx:Period>PT2S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>Start_StimOn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM6</ard:PortName>
                <ard:Pin>7</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT30M</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>0</vid:Index>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>D:\20260121\training_session1_.avi</cv:FileName>
          <cv:Suffix>Timestamp</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Sample" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT5M</rx:DueTime>
          <rx:Period>PT2S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>Shock_StimOn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM6</ard:PortName>
                <ard:Pin>12</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT5M1S</rx:DueTime>
          <rx:Period>PT2S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>Shock_StimOff</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM6</ard:PortName>
                <ard:Pin>12</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT9M1S</rx:DueTime>
          <rx:Period>PT2S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>Start_StimOff</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ard:DigitalOutput">
                <ard:PortName>COM6</ard:PortName>
                <ard:Pin>7</ard:Pin>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="6" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>